PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1200]
  expName = untitled
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine trial
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    KeyboardComponent key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextboxComponent textbox_2
      bold = False
      editable = False
      letterHeight = 0.05
      size = (1, 1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $coherence_instructions
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  Routine sync_fMRI
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    KeyboardComponent key_resp_2
      allowedKeys = "5"
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine rest
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    TextComponent rest_fixation
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 12
      text = +
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  Routine reading
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    TextboxComponent textbox_coherence
      bold = False
      borderColor = 1.0000, 1.0000, 1.0000
      borderWidth = 6
      editable = False
      letterHeight = 0.05
      size = (0.9, 0.9)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text [set every frame]:
        $coherence_text_01
  Routine task
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    TextboxComponent textbox_task
      bold = False
      borderColor = -1.0000, 1.0000, -1.0000
      borderWidth = 6
      editable = False
      letterHeight = 0.05
      size = (0.9, 0.9)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text [set every frame] = $coherence_text_01
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  Routine control
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    TextboxComponent textbox
      bold = False
      borderColor = 1.0000, -1.0000, -1.0000
      borderWidth = 6
      editable = False
      letterHeight = 0.05
      size = (0.9, 0.9)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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      text [set every frame]:
        $coherence_text_01
  Routine task_verification
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    TextComponent task_verification_message
      color [set every frame] = $color_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
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      text:
        Did you think about how these events fit together and form a coherent life story?

        Press 1 for yes and 2 for no.
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        event.clearEvents(eventType='keyboard')
        color_text = 'white'  # default
      Each Frame:
        keys = event.getKeys(keyList=['1', '2'])

        if '1' in keys:
            color_text = 'green'
        elif '2' in keys:
            color_text = 'red'
  Routine control_verification
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    TextComponent text
      color [set every frame] = $color_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
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      text:
        Were there more than 16 vowels total in the previous sentences?

        Press 1 for yes and 2 for no.
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        event.clearEvents(eventType='keyboard')
        color_text = 'white'  # default
      Each Frame:
        keys = event.getKeys(keyList=['1', '2'])

        if '1' in keys:
            color_text = 'green'
        elif '2' in keys:
            color_text = 'red'
  Routine end
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    TextComponent end_message
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = You have completed the task.
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  Routine reading2
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    TextboxComponent reading2_textbox
      bold = False
      borderColor = 1.0000, 1.0000, 1.0000
      borderWidth = 6
      editable = False
      letterHeight = 0.05
      size = (0.9, 0.9)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every frame] = $coherence_text_02
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  Routine control2
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    TextboxComponent control2_textbox
      bold = False
      borderColor = 1.0000, -1.0000, -1.0000
      borderWidth = 6
      color = 1.0000, 1.0000, 1.0000
      editable = False
      letterHeight = 0.05
      size = (0.9, 0.9)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text [set every frame] = $coherence_text_02
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  Routine task2
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    TextboxComponent task2_textbox
      bold = False
      borderColor = -1.0000, 1.0000, -1.0000
      borderWidth = 6
      editable = False
      letterHeight = 0.05
      size = (0.9, 0.9)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text [set every frame] = $coherence_text_02
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  Routine reading3
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    TextboxComponent reading3_textbox
      bold = False
      borderColor = 1.0000, 1.0000, 1.0000
      borderWidth = 6
      editable = False
      letterHeight = 0.05
      size = (0.9, 0.9)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every frame] = $coherence_text_03
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  Routine task3
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    TextboxComponent task3_textbox
      bold = False
      borderColor = -1.0000, 1.0000, -1.0000
      borderWidth = 6
      editable = False
      letterHeight = 0.05
      size = (0.9, 0.9)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text [set every frame] = $coherence_text_03
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  Routine control3
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    TextboxComponent control3_textbox
      bold = False
      borderColor = 1.0000, -1.0000, -1.0000
      borderWidth = 6
      editable = False
      letterHeight = 0.05
      size = (0.9, 0.9)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text [set every frame] = $coherence_text_03
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Flow
  LoopInitiator trials_2 loopType="TrialHandler"
    conditions = [{'coherence_instructions': 'In this task, you’ll see short phrases describing  events from your life.\n \n • When the text has a white border, simply read the text \n \n • When the text box has a <c=#008000>green</c> border, think about how these events fit together and form a coherent life story. \n \n • When the text box has a <c=#FF0000>red</c> border, count the number of vowels. Keep repeating this counting task until the next screen appears. \n \n Press any key when you’re ready!', 'significance_instructions': 'In this task, you will read some of your personal statements. \n \n • When th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
    conditionsFile = ../instructions.xlsx
    loopType = random
    nReps = 1
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    Routine trial
    Routine sync_fMRI
  LoopTerminator trials_2
  LoopInitiator trials loopType="TrialHandler"
    conditions = [{'coherence_text_01': 'Moving to Montreal \n \n Studying Cogntive Science \n \n Graduating ', 'coherence_text_02': 'Moving to Paris \n \n Studying neuroscience \n \n Conducting research', 'coherence_text_03': 'Moving to LA \n \n Studying at the BCI \n \n Writing a review ', 'purpose_text_01': 'Becoming a scientist', 'purpose_text_02': 'Advancing research', 'purpose_text_03': 'Making science accessible', 'significance_text_01': 'I am significant to my parents. \n \n We are  connected. \n \n I play an important role in keeping us close-knit.', 'significance_text_02': 'I am  significant to my si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
    conditionsFile = ../prompts.xlsx
    loopType = random
    nReps = 1
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    Routine rest
    Routine reading
    Routine task
    Routine task_verification
    Routine control
    Routine control_verification
    Routine rest
    Routine reading2
    Routine control2
    Routine control_verification
    Routine task2
    Routine task_verification
    Routine rest
    Routine reading3
    Routine task3
    Routine task_verification
    Routine control3
    Routine control_verification
    Routine rest
  LoopTerminator trials
  Routine end
