PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1200]
  expName = untitled
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine sync_fMRI
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    KeyboardComponent key_resp_2
      allowedKeys = "5"
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine rest
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    TextComponent rest_fixation
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 12
      text = +
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  Routine task_verification
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    TextComponent task_verification_message
      color [set every frame] = $f_color
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        Were you able to complete the task successfully?

        Press 1 for yes and 2 for no.
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        f_color = 'white'
      Each Frame:
        keys = event.getKeys()

        if '1' in keys:
            f_color = 'green'
        elif '2' in keys:
            f_color = 'red'
    KeyboardComponent key_resp_verif_1
      allowedKeys = "1","2"
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine control_verification
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    TextComponent text
      color [set every frame] = $f_color
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        Were there more than 16 vowels total in the previous sentences?

        Press 1 for yes and 2 for no.
    KeyboardComponent key_resp_6
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        f_color = 'white'
      Each Frame:
        keys = event.getKeys()

        if '1' in keys:
            f_color = 'green'
        elif '2' in keys:
            f_color = 'red'
  Routine end
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    TextComponent end_message
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 12
      text = You have completed the task.
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  Routine Welcome
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome! Let’s start with a brief training before we move to the scanner.

        Press any key to start.
    KeyboardComponent key_resp_5
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions_significance
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    KeyboardComponent key_resp_3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextboxComponent textbox_3
      bold = False
      editable = False
      letterHeight = 0.05
      size = (1,1)
      startVal [time (s)] = 0.0
      text [set every frame] = $significance_instructions
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  Routine coherence_reading
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    TextboxComponent textbox_coherence
      bold = False
      borderColor = 1.0000, 1.0000, 1.0000
      borderWidth = 6
      editable = False
      letterHeight = 0.05
      size = (0.9, 0.9)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text [set every frame]:
        $training_text_coherence
  Routine coherence_task
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    TextboxComponent textbox_task
      bold = False
      borderColor = -1.0000, 1.0000, -1.0000
      borderWidth = 6
      editable = False
      letterHeight = 0.05
      size = (0.9, 0.9)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text [set every frame] = $training_text_coherence
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  Routine significance_reading
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    TextboxComponent reading2_textbox
      bold = False
      borderColor = 1.0000, 1.0000, 1.0000
      borderWidth = 6
      editable = False
      letterHeight = 0.05
      size = (0.9, 0.9)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every frame] = $training_text_significance
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  Routine significance_task
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    TextboxComponent task2_textbox
      bold = False
      borderColor = -1.0000, 1.0000, -1.0000
      borderWidth = 6
      editable = False
      letterHeight = 0.05
      size = (0.9, 0.9)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text [set every frame] = $training_text_significance
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  Routine purpose_reading
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    TextboxComponent reading3_textbox
      bold = False
      borderColor = 1.0000, 1.0000, 1.0000
      borderWidth = 6
      editable = False
      letterHeight = 0.05
      size = (0.9, 0.9)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every frame] = $training_text_purpose
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  Routine purpose_task
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    TextboxComponent task3_textbox
      bold = False
      borderColor = -1.0000, 1.0000, -1.0000
      borderWidth = 6
      editable = False
      letterHeight = 0.05
      size = (0.9, 0.9)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text [set every frame] = $training_text_purpose
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  Routine purpose_control
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    TextboxComponent control3_textbox
      bold = False
      borderColor = 1.0000, -1.0000, -1.0000
      borderWidth = 6
      editable = False
      letterHeight = 0.05
      size = (0.9, 0.9)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text [set every frame] = $training_text_purpose
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  Routine instructions_purpose
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    TextComponent purpose_instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In this task, you will read a short phrase describing one of your life purposes.

         • When the text box has a white border, simply read the phrase.

         • When the text box has a green border, reflect on that purpose and consider how you might pursue it.

         • When the text box has a red border, count the number of vowels. Continue this counting task until the next screen appears.

        Press any key when you're ready!
    KeyboardComponent key_resp_4
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextboxComponent textbox_4
      bold = False
      editable = False
      letterHeight = 0.05
      size = (1,1)
      startVal [time (s)] = 0.0
      text [set every frame] = $purpose_instructions
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  Routine significance_control
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    TextboxComponent control2_textbox
      bold = False
      borderColor = 1.0000, -1.0000, -1.0000
      borderWidth = 6
      color = 1.0000, 1.0000, 1.0000
      editable = False
      letterHeight = 0.05
      size = (0.9, 0.9)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text [set every frame] = $training_text_significance
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  Routine coherence_control
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    TextboxComponent textbox
      bold = False
      borderColor = 1.0000, -1.0000, -1.0000
      borderWidth = 6
      editable = False
      letterHeight = 0.05
      size = (0.9, 0.9)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text [set every frame] = $training_text_coherence
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  Routine coherence_ins
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    KeyboardComponent key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextboxComponent textbox_2
      bold = False
      editable = False
      letterHeight = 0.05
      size = (1,1)
      startVal [time (s)] = 0.0
      text [set every frame] = $coherence_instructions
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Flow
  LoopInitiator trials_2 loopType="TrialHandler"
    conditions = [{'coherence_instructions': 'In this task, you’ll see short phrases describing five events from your life.\n \n • When the text has a white border, simply read the text \n \n • When the text box has a <c=#008000>green</c> border, think about how these events fit together and form a coherent life story. \n \n • When the text box has a <c=#FF0000>red</c> border, count the number of vowels. Keep repeating this counting task until the next screen appears. \n \n Press any key when you’re ready!', 'significance_instructions': 'In this task, you will read some of your personal statements. \n \n • Whe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
    conditionsFile = ../instructions.xlsx
    loopType = random
    nReps = 1
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    Routine Welcome
    LoopInitiator trials loopType="TrialHandler"
      conditions = [{'coherence_text_01': 'Moving to Montreal \n \n Studying Cogntive Science \n \n Graduating ', 'coherence_text_02': 'Moving to Paris \n \n Studying neuroscience \n \n Conducting research', 'coherence_text_03': 'Moving to LA \n \n Studying at the BCI \n \n Writing a review ', 'purpose_text_01': 'Becoming a scientist', 'purpose_text_02': 'Advancing research', 'purpose_text_03': 'Making science accessible', 'significance_text_01': 'I am significant to my parents. \n \n We are  connected. \n \n I play an important role in keeping us close-knit.', 'significance_text_02': 'I am  significant to my si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
      conditionsFile = /Users/jacquessinger/Documents/Academics/Research/BCI Projects/MIL_PsychoPy_fMRI/prompts.xlsx
      isTrials = False
      loopType = random
      nReps = 1
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      Routine coherence_ins
      Routine rest
      Routine coherence_reading
      Routine coherence_task
      Routine task_verification
      Routine coherence_control
      Routine control_verification
      Routine rest
      Routine instructions_significance
      Routine significance_reading
      Routine significance_control
      Routine control_verification
      Routine significance_task
      Routine task_verification
      Routine rest
      Routine instructions_purpose
      Routine purpose_reading
      Routine purpose_task
      Routine task_verification
      Routine purpose_control
      Routine control_verification
    LoopTerminator trials
  LoopTerminator trials_2
  Routine end
